CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<myRow>\d+)c(?P<myCol>\d+)f(?P<myField>\d+)p(?P<myPosition>\d+)-ch(?P<myChannel>\d+)sk(?P<myCycle>\d+).*\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*[-](?P<PlateNumber>.*)[.]
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'ch1': u'myRow', u'ch2': u'myRow', u'ch3': u'myRow'}, {u'ch1': u'myCol', u'ch2': u'myCol', u'ch3': u'myCol'}, {u'ch1': u'myField', u'ch2': u'myField', u'ch3': u'myField'}, {u'ch1': u'PlateNumber', u'ch2': u'PlateNumber', u'ch3': u'PlateNumber'}, {u'ch1': u'myPosition', u'ch2': u'myPosition', u'ch3': u'myPosition'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does myChannel "1")
    Name to assign these images:ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2")
    Name to assign these images:ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "3")
    Name to assign these images:ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:5
    Metadata category:myCol
    Metadata category:myRow
    Metadata category:myField
    Metadata category:FileLocation
    Metadata category:PlateNumber

Align:[module_num:5|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:ch1
    Name the first output image:AlignedCh1
    Select the second input image:ch2
    Name the second output image:AlignedCh2
    Select the additional image:ch3
    Name the output image:AlignedCh3
    Select how the alignment is to be applied:Similarly

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:AlignedCh1
    Name the output image:IllumCh1
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:AlignedCh2
    Name the output image:IllumCh2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:AlignedCh3
    Name the output image:IllumCh3
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:ch1
    Name the output image:CorrCh1
    Select the illumination function:IllumCh1
    Select how the illumination function is applied:Divide
    Select the input image:ch3
    Name the output image:CorrCh3
    Select the illumination function:IllumCh3
    Select how the illumination function is applied:Divide
    Select the input image:ch2
    Name the output image:CorrCh2
    Select the illumination function:IllumCh2
    Select how the illumination function is applied:Divide

RescaleIntensity:[module_num:10|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
    Select the input image:CorrCh2
    Name the output image:RescaleIntensityCh2
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:CorrCh1
    Name the output image:RescaleIntensityCh1
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:CorrCh3
    Name the output image:RescaleIntensityCh3
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:13|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notes:['The tubeness filter is a good choice for highlighting tube-like or line-like structures in an image, especially if one is concerned with segmenting a continous structure such as neurites. However, in this application we are not concerned with the neurites of ']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
    Select the input image:RescaleIntensityCh1
    Name the output image:EnhanceMAP2PositiveNeurites
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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
Threshold:[module_num:14|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notes:['It is better to have “True” labeling than to have false positives.']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
    Select the input image:EnhanceMAP2PositiveNeurites
    Name the output image:ThresholdMAP2PositiveNeurites
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,.9
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertImageToObjects:[module_num:15|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
    Select the input image:ThresholdMAP2PositiveNeurites
    Name the output object:MAP2PositiveNeurites
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:RescaleIntensityCh3
    Name the output image:SpecklesSYNAPSIN1
    Select the operation:Enhance
    Feature size:12
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:SpecklesSYNAPSIN1
    Name the primary objects to be identified:SYNAPSIN1AllPuncta
    Typical diameter of objects, in pixel units (Min,Max):1,6
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.05,0.5
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:1
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:RescaleIntensityCh2
    Name the primary objects to be identified:DAPI_PositiveNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:19|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
    Parent objects:MAP2PositiveNeurites
    Child objects:SYNAPSIN1AllPuncta
    Name the output object:SYNAPSIN1PunctaMAP2PositiveNeuritesObject
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:SYNAPSIN1PunctaMAP2PositiveNeuritesObject
    Name the output image:SYNAPSIN1PunctaMAP2PositiveNeuritesImage
    Select the color format:Binary (black & white)
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
ConvertImageToObjects:[module_num:21|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
    Select the input image:SYNAPSIN1PunctaMAP2PositiveNeuritesImage
    Name the output object:SYNAPSIN1PunctaOnMAP2PositiveNeurites
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:22|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
    Select objects to measure:MAP2PositiveNeurites
    Select objects to measure:SYNAPSIN1PunctaOnMAP2PositiveNeurites
    Select objects to measure:SYNAPSIN1AllPuncta
    Calculate the Zernike features?:Yes

MeasureImageAreaOccupied:[module_num:23|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:MAP2PositiveNeurites
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:SYNAPSIN1PunctaOnMAP2PositiveNeurites
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:SYNAPSIN1AllPuncta
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:Yes
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    Name the output image:SYNAPSIN1PunctaOnMAP2PositiveNeurites
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#107F40
    Select objects to display:MAP2PositiveNeurites
    Select outline color:#FB0106
    Select objects to display:SYNAPSIN1PunctaOnMAP2PositiveNeurites

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:SYNAPSIN1PunctaOnMAP2PositiveNeurites
    Select method for constructing file names:From image filename
    Select image name for file prefix:ch3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:\g<PlateNumber>
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/day 14 0710/Synaptic Colocalization-Map2 + PSD95
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/day 14 0710/Synaptic Colocalization-Map2 + PSD95
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SYNAPSIN1AllPuncta|Number_Object_Number,SYNAPSIN1AllPuncta|AreaShape_Area,SYNAPSIN1PunctaOnMAP2PositiveNeurites|Number_Object_Number,SYNAPSIN1PunctaOnMAP2PositiveNeurites|AreaShape_Area,MAP2PositiveNeurites|AreaShape_Area,Image|Count_DAPI_PositiveNuclei,Image|Count_SYNAPSIN1PunctaOnMAP2PositiveNeurites,Image|Count_SYNAPSIN1AllPuncta,Image|AreaOccupied_AreaOccupied_SYNAPSIN1AllPuncta,Image|AreaOccupied_AreaOccupied_SYNAPSIN1PunctaOnMAP2PositiveNeurites,Image|Metadata_PlateNumber,Image|Metadata_myCol,Image|Metadata_myField,Image|Metadata_myRow,DAPI_PositiveNuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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